{
  "actions": {
    "acqdatetime": {
      "filters": {},
      "params": {
        "datetime_series_description": "Geometric Distortion_Rgb"
      }
    },
    "GeomAcc_rgb": {
    	"filters": {
    	    "series_description": "Geometric Distortion_Rgb"
    	},
    	"params": {
    	 "table_cutoff": "85",
    	 "phantom_top_cutoff": "212"
    	}
    }
  },
  "cfgformat": "20220627",
  "comments": {
    "author": "Tim Schakel, UMCU",
    "description": "WADQC 2 module to analyze Geometric Fidelity measurements",
    "version": "0.1",
    "params": {
      "datetime_series_description": "REQUIRED. Series description for retreiving datetime"
    }
  }
}
